<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix="clr-namespace:OpenEphys.Onix;assembly=OpenEphys.Onix"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:CreateContext">
          <onix:Driver>riffa</onix:Driver>
          <onix:Index>0</onix:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:ConfigureHeadstage64">
          <onix:Name>HS64</onix:Name>
          <onix:Rhd2164>
            <onix:DeviceName>HS64.Rhd2164</onix:DeviceName>
            <onix:DeviceAddress>256</onix:DeviceAddress>
            <onix:Enable>true</onix:Enable>
            <onix:AmplifierDataFormat>Unsigned</onix:AmplifierDataFormat>
            <onix:DspCutoff>Off</onix:DspCutoff>
            <onix:AnalogLowCutoff>Low100mHz</onix:AnalogLowCutoff>
            <onix:AnalogHighCutoff>High10000Hz</onix:AnalogHighCutoff>
          </onix:Rhd2164>
          <onix:Bno055>
            <onix:DeviceName>HS64.Bno055</onix:DeviceName>
            <onix:DeviceAddress>257</onix:DeviceAddress>
            <onix:Enable>true</onix:Enable>
          </onix:Bno055>
          <onix:TS4231>
            <onix:DeviceName>HS64.TS4231</onix:DeviceName>
            <onix:DeviceAddress>258</onix:DeviceAddress>
            <onix:Enable>true</onix:Enable>
          </onix:TS4231>
          <onix:Port>PortA</onix:Port>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:StartAcquisition">
          <onix:ReadSize>2048</onix:ReadSize>
          <onix:WriteSize>2048</onix:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RHD2164</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix:Rhd2164Data">
                <onix:DeviceName>HS64.Rhd2164</onix:DeviceName>
                <onix:BufferSize>30</onix:BufferSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AmplifierData</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>39</dsp:int>
                  <dsp:int>37</dsp:int>
                  <dsp:int>35</dsp:int>
                  <dsp:int>33</dsp:int>
                  <dsp:int>47</dsp:int>
                  <dsp:int>45</dsp:int>
                  <dsp:int>43</dsp:int>
                  <dsp:int>41</dsp:int>
                  <dsp:int>55</dsp:int>
                  <dsp:int>53</dsp:int>
                  <dsp:int>51</dsp:int>
                  <dsp:int>49</dsp:int>
                  <dsp:int>57</dsp:int>
                  <dsp:int>63</dsp:int>
                  <dsp:int>61</dsp:int>
                  <dsp:int>59</dsp:int>
                  <dsp:int>62</dsp:int>
                  <dsp:int>60</dsp:int>
                  <dsp:int>58</dsp:int>
                  <dsp:int>56</dsp:int>
                  <dsp:int>54</dsp:int>
                  <dsp:int>52</dsp:int>
                  <dsp:int>50</dsp:int>
                  <dsp:int>48</dsp:int>
                  <dsp:int>46</dsp:int>
                  <dsp:int>44</dsp:int>
                  <dsp:int>42</dsp:int>
                  <dsp:int>40</dsp:int>
                  <dsp:int>38</dsp:int>
                  <dsp:int>36</dsp:int>
                  <dsp:int>34</dsp:int>
                  <dsp:int>32</dsp:int>
                  <dsp:int>24</dsp:int>
                  <dsp:int>26</dsp:int>
                  <dsp:int>28</dsp:int>
                  <dsp:int>30</dsp:int>
                  <dsp:int>16</dsp:int>
                  <dsp:int>18</dsp:int>
                  <dsp:int>20</dsp:int>
                  <dsp:int>22</dsp:int>
                  <dsp:int>8</dsp:int>
                  <dsp:int>10</dsp:int>
                  <dsp:int>12</dsp:int>
                  <dsp:int>14</dsp:int>
                  <dsp:int>0</dsp:int>
                  <dsp:int>2</dsp:int>
                  <dsp:int>4</dsp:int>
                  <dsp:int>6</dsp:int>
                  <dsp:int>3</dsp:int>
                  <dsp:int>5</dsp:int>
                  <dsp:int>7</dsp:int>
                  <dsp:int>1</dsp:int>
                  <dsp:int>9</dsp:int>
                  <dsp:int>11</dsp:int>
                  <dsp:int>13</dsp:int>
                  <dsp:int>15</dsp:int>
                  <dsp:int>17</dsp:int>
                  <dsp:int>19</dsp:int>
                  <dsp:int>21</dsp:int>
                  <dsp:int>23</dsp:int>
                  <dsp:int>25</dsp:int>
                  <dsp:int>27</dsp:int>
                  <dsp:int>29</dsp:int>
                  <dsp:int>31</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>rhd2164-ephys_.raw</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>rhd2164-first-time_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp</io:Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AuxData</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>rhd2164-aux_.raw</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>rhd2164-clock_.raw</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BNO055</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix:Bno055Data">
                <onix:DeviceName>HS64.Bno055</onix:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Quaternion</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Commutator</Name>
                <Description>Drives ONIX Commutator from BNO055 Quaterion data. Pressing down/up keys will manually turn the commutator, overrding the BNO055 heading input.
</Description>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:KeyDown">
                        <p1:Filter>Up</p1:Filter>
                        <p1:SuppressRepetitions>false</p1:SuppressRepetitions>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>"{turn : 0.1}"</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:KeyDown">
                        <p1:Filter>Down</p1:Filter>
                        <p1:SuppressRepetitions>false</p1:SuppressRepetitions>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="StringProperty">
                        <Value>"{turn : -0.1}"</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="p2:PythonTransform">
                      <p2:Name>Heading</p2:Name>
                      <p2:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *
from math import atan2
@returns(float)
def process(value):

  q0 = value[0].Val0;
  q1 = value[1].Val0;
  q2 = value[2].Val0;
  q3 = value[3].Val0;

  return atan2((2 * (q0 * q3 + q1 * q2)), (1 - 2 * (q2**2 + q3**2)))</p2:Script>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>heading_.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>false</io:IncludeHeader>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timer">
                        <rx:DueTime>PT0S</rx:DueTime>
                        <rx:Period>PT0.1S</rx:Period>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Sample" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="p2:PythonTransform">
                      <p2:Script>from math import pi

@returns(str)
def process(value):
  
  
  last = value.Item2

  curr = value.Item1
  a1 = curr + 2 * pi
  a2 = curr - 2 * pi
  pos = [curr, a1, a2]

  delta = [abs(x - last) for x in pos]

  p = pos[delta.index(min(delta))]

  turn = (p - last) / (2 * pi)

  return "{turn : %s}" % turn</p2:Script>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="PortName" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="io:SerialStringWrite">
                        <io:PortName>COM3</io:PortName>
                        <io:NewLine>\r\n</io:NewLine>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="12" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="12" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="8" Label="Source1" />
                    <Edge From="7" To="8" Label="Source2" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="8" To="10" Label="Source1" />
                    <Edge From="9" To="10" Label="Source2" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="11" To="12" Label="Source3" />
                    <Edge From="12" To="14" Label="Source1" />
                    <Edge From="13" To="14" Label="Source2" />
                    <Edge From="14" To="15" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>bno055-other_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value.Clock,Value.Temperature,Value.Calibration,Value.Acceleration,Value.Quaternion,Value.Gravity,Value.EulerAngle</io:Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:TS4231Data">
          <onix:DeviceName>HS64.TS4231</onix:DeviceName>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>